PsychoPy2experiment version="1.83.02"
Settings
  Data filename = u'data' + os.sep + expInfo[u'Session Code']
  Monitor = testMonitor
  color = $[0.5,0.5,0.5]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'Session Code': u''}
  Save wide csv file = False
  expName = iohub wintab demo
  logging level = warning
  Units = norm
  Screen = 1
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Routines
  Routine Play_AV
    ImageComponent NO_WRT_BL_2
      stopVal [condition] = sound_2.status==FINISHED and movie_2.status==FINISHED
      durationEstim = 2
      pos = [-.9, -.9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    ImageComponent NO_WRT_TR_2
      stopVal [condition] = sound_2.status==FINISHED and movie_2.status==FINISHED
      durationEstim = 2
      pos = [.9, .9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    ImageComponent NO_WRT_TL_2
      stopVal [condition] = sound_2.status==FINISHED and movie_2.status==FINISHED
      durationEstim = 2
      pos = [-.9, .9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    ImageComponent NO_WRT_BR_2
      stopVal [condition] = sound_2.status==FINISHED and movie_2.status==FINISHED
      durationEstim = 2
      pos = [.9, -.9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    MovieComponent movie_2
      movie [set every repeat] = $T_MOV
      durationEstim = 2
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      backend = moviepy
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    PolygonComponent PenPosPoint_2
      opacity = 0.9
      stopVal [condition] = sound_2.status==FINISHED and movie_2.status==FINISHED
      durationEstim = 2
      pos [set every frame] = $penDotPosition
      fillColor [set every frame] = $penDotColor
      lineColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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    CodeComponent UpdatePenPosGfx_2
      Each Frame:
        pen_samples = tablet.getSamples()
        if pen_samples:
            lsample = pen_samples[-1]
            lspos = lsample.getNormPos()
            penDotOpacity = 0.75
            penDotPosition = lspos
            if lsample.pressure > 0:
                penDotColor = [0,1,0]
            else:
                penDotColor = [1,0,0]
    SoundComponent sound_2
      sound [set every repeat] = $T_SND
      stopVal [duration (s)] = sound_2.getDuration()+1
      durationEstim = 1
      startVal [time (s)] = 1.0
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  Routine DisplayNoWriting_1sec
    ImageComponent NO_WRT_BL_3
      stopVal [duration (s)] = 1
      pos = [-.9, -.9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    ImageComponent NO_WRT_TR_3
      stopVal [duration (s)] = 1
      pos = [.9, .9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    ImageComponent NO_WRT_TL_3
      stopVal [duration (s)] = 1
      pos = [-.9, .9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    ImageComponent NO_WRT_BR_3
      stopVal [duration (s)] = 1
      pos = [.9, -.9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    ImageComponent greendot1
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $T_IMG
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    PolygonComponent PenPosPoint_3
      opacity = 0.9
      stopVal [duration (s)] = 1
      pos [set every frame] = $penDotPosition
      fillColor [set every frame] = $penDotColor
      lineColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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    CodeComponent UpdatePenPosGfx_3
      Each Frame:
        pen_samples = tablet.getSamples()
        if pen_samples:
            lsample = pen_samples[-1]
            lspos = lsample.getNormPos()
            penDotOpacity = 0.75
            penDotPosition = lspos
            if lsample.pressure > 0:
                penDotColor = [0,1,0]
            else:
                penDotColor = [1,0,0]
  Routine practice
    TextComponent use_pen_instruct_txt_2
      color = $[-1.000,-1.000,-1.000]
      pos = [0, 0.9]
      text = Use this screen to practice using the Tablet Sylus / Pen.
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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    ImageComponent practice_image
      startVal [time (s)] = 0.0
      image = 3Lines.png
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    CodeComponent draw_pen_traces
      Each Frame:
        # >>> iohub Custom Code

        # *pen_traces_stim* updates
        if t >= 0.0 and pen_traces_stim.status == NOT_STARTED:
            # keep track of start time/frame for later
            pen_traces_stim.tStart = t  # underestimates by a little under one frame
            pen_traces_stim.frameNStart = frameN  # exact frame index
            pen_traces_stim.setAutoDraw(True)

        pen_samples = tablet.getSamples()
        if pen_samples:
            pen_traces_stim.updateFromEvents(pen_samples)

        # <<< iohub Custom Code
      Begin Routine:
        # >>> iohub Custom Code

        pen_traces_stim.setAutoDraw(False)
        pen_traces_stim.status = NOT_STARTED

        io.clearEvents()
        io.sendMessageEvent("Started Pen Practice Period")

        tablet.reporting = True

        # <<< iohub Custom Code
      End Routine:
        # >>> iohub Custom Code
        tablet.reporting = False
        io.clearEvents()
        io.sendMessageEvent("End Pen Practice Period")

        pen_traces_stim.clear()
        pen_traces_stim.setAutoDraw(False)
        pen_traces_stim.status = NOT_STARTED
        # <<< iohub Custom Code
    ImageComponent practice_end_image
      pos = [.8, -.8]
      startVal [time (s)] = 0.0
      image = but_stop.bmp
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    CodeComponent draw_pen_pos
      Each Frame:
        # *pen_pos_stim* updates
        if t >= 0.0 and pen_pos_stim.status == NOT_STARTED:
            # keep track of start time/frame for later
            pen_pos_stim.tStart = t  # underestimates by a little under one frame
            pen_pos_stim.frameNStart = frameN  # exact frame index
            pen_pos_stim.setAutoDraw(True)

        if pen_samples:
            pen_pos_stim.updateFromEvent(pen_samples[-1])

            for ps in pen_samples:
                if 'FIRST_ENTER' in ps.status:
                    penPosInExit=0
                if ps.pressure > 0 and practice_end_image.contains(ps.getNormPos()):
                    penPosInExit=penPosInExit+1
                else:
                    penPosInExit=max(0,penPosInExit-1)
                if penPosInExit>=penPosInExitStimThresh:
                    continueRoutine = False
                    break
      Begin Routine:
        pen_pos_stim.setAutoDraw(False)
        pen_pos_stim.status = NOT_STARTED
        penPosInExitStimThresh = 20
        penPosInExit = 0
      End Routine:
        pen_pos_stim.clear()
        pen_pos_stim.setAutoDraw(False)
        pen_pos_stim.status = NOT_STARTED
  Routine DisplayNoWritingScreen
    ImageComponent NO_WRT_BL
      stopVal [duration (s)] = 2
      pos = [-.9, -.9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    ImageComponent NO_WRT_TR
      stopVal [duration (s)] = 2
      pos = [.9, .9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    ImageComponent NO_WRT_TL
      stopVal [duration (s)] = 2
      pos = [-.9, .9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    ImageComponent NO_WRT_BR
      stopVal [duration (s)] = 2
      pos = [.9, -.9]
      startVal [time (s)] = 0.0
      image = nowriting.jpg
      size = [0.1, 0.1]
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    PolygonComponent PenPosPoint
      opacity = 0.9
      fillColor [set every frame] = $penDotColor
      stopVal [duration (s)] = 2
      pos [set every frame] = $penDotPosition
      lineColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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    CodeComponent UpdatePenPosGfx
      Each Frame:
        pen_samples = tablet.getSamples()
        if pen_samples:
            lsample = pen_samples[-1]
            lspos = lsample.getNormPos()
            penDotOpacity = 0.75
            penDotPosition = lspos
            if lsample.pressure > 0:
                penDotColor = [0,1,0]
            else:
                penDotColor = [1,0,0]
      Begin Routine:
        tablet.reporting = True
        tablet.clearEvents()
        penDotOpacity = 0
        penDotPosition = [0,0]
        penDotColor = [1,0,0]
  Routine trial
    PolygonComponent white_backgnd
      fillColor = $[1,1,1]
      startVal [time (s)] = 0.0
      size = [2, 2]
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    ImageComponent trial_image
      units = norm
      startVal [time (s)] = 0.0
      image [set every repeat] = $T_IMG
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    CodeComponent trial_custom_code
      Each Frame:
        # >>> iohub Custom Code

        # *pen_traces_stim* updates
        if t >= 0.0 and pen_traces_stim.status == NOT_STARTED:
            # keep track of start time/frame for later
            pen_traces_stim.tStart = core.getTime()  # underestimates by a little under one frame
            pen_traces_stim.frameNStart = frameN  # exact frame index
            pen_traces_stim.setAutoDraw(True)


        pen_samples = tablet.getSamples()
        if pen_samples:
            dsamples = [ps for ps in pen_samples if not trial_end_image.contains(ps.getNormPos())]
            pen_traces_stim.updateFromEvents(dsamples)

            for ps in pen_samples:
                if 'FIRST_ENTER' in ps.status:
                    penPosInExit=0

                if ps.pressure > 0 and trial_end_image.contains(ps.getNormPos()):
                    penPosInExit=penPosInExit+1
                else:
                    penPosInExit=max(0,penPosInExit-1)

                if penPosInExit>=penPosInExitStimThresh:
                    pen_traces_stim.tEnd=core.getTime()
                    continueRoutine = False
                    break

            lsample = pen_samples[-1]
            lspos = lsample.getNormPos()
            penDotOpacity = 0.75
            penDotPosition = lspos
            if lsample.pressure > 0:
                penDotColor = [0,1,0]
            else:
                penDotColor = [1,0,0]
        # <<< iohub Custom Code
      Begin Routine:
        # >>> iohub Custom Code
        pen_traces_stim.clear()
        pen_traces_stim.setAutoDraw(False)
        pen_traces_stim.status = NOT_STARTED



        penDotPosition = [0,0]
        penDotColor = [1,0,0]

        penPosInExitStimThresh = 40
        penPosInExit = 0

        # <<< iohub Custom Code
      End Routine:
        # >>> iohub Custom Code
        tablet.reporting = False


        thisTrial['DV_TRIAL_START']=pen_traces_stim.tStart
        thisTrial['DV_TRIAL_END']=pen_traces_stim.tEnd
        io.addTrialHandlerRecord(thisTrial)

        pen_traces_stim.clear()
        pen_traces_stim.setAutoDraw(False)
        pen_traces_stim.status = NOT_STARTED


        # <<< iohub Custom Code
    ImageComponent trial_end_image
      pos = [.8, -0.8]
      startVal [time (s)] = 0.0
      image = but_stop.bmp
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    PolygonComponent penDotStim
      opacity = 0.9
      fillColor [set every frame] = $penDotColor
      pos [set every frame] = $penDotPosition
      units = norm
      lineColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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  Routine instruct
    TextComponent instrText
      color = $[-1.000,-1.000,-1.000]
      wrapWidth = 800
      units = norm
      text = Press Any Key To Start Experiment.
      startVal [time (s)] = 0
      letterHeight = .05
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[0.004,-0.498,-0.498]
      wrapWidth = 800
      units = norm
      startVal [time (s)] = 1.0
      font = arial
      letterHeight = 0.050
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      text:
        This is the end of the experiment.

        Press any key to exit.
    KeyboardComponent goodbye
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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    PolygonComponent PenPointThanks
      lineColor [set every frame] = $penDotColor
      pos [set every frame] = $penDotPosition
      fillColor [set every frame] = $penDotColor
      startVal [time (s)] = 0.0
      nVertices = 90
      size = [0.01, 0.01]
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    CodeComponent updatePenPos
      Each Frame:
        pen_samples = tablet.getSamples()
        if pen_samples:
            lsample = pen_samples[-1]
            lspos = lsample.getNormPos()
            penDotOpacity = 0.75
            penDotPosition = lspos
            if lsample.pressure > 0:
                penDotColor = [0,1,0]
            else:
                penDotColor = [1,0,0]
      Begin Routine:
        tablet.reporting = True
        tablet.clearEvents()
        penDotOpacity = 0
      End Routine:
        tablet.reporting = False
  Routine Init_tablet
    CodeComponent init_iohub
      Begin Experiment:
        try:
            import wintabgraphics
            from wintabgraphics import PenPositionStim, PenTracesStim
            from psychopy.iohub.client.wintabtablet import ScreenPositionValidation
            from ccutil import *

            io = start_iohub(expInfo[u'Session Code'], expName)
            tablet = io.devices.tablet

            # Check that the tablet device was created without any errors
            if tablet.getInterfaceStatus() != "HW_OK":
                print("Error creating Wintab device:", tablet.getInterfaceStatus())
                print("TABLET INIT ERROR:", tablet.getLastInterfaceErrorString())
                io.quit()
                core.quit()
                sys.exit(1)

            pen_pos_stim= PenPositionStim(win)
            pen_traces_stim= PenTracesStim(win)

            pen_pos_stim.autoDraw = False
            pen_traces_stim.autoDraw = False
            pen_pos_stim.status = NOT_STARTED
            pen_traces_stim.status = NOT_STARTED

            # Create the iohub datstore condition variables table.
            # The following 2 lines of code is a hack, as it does not appear
            # that you can get the order of the column names as found in the
            # condition file using any of the Builder generated python code.
            temp_exp_conds, temp_ecnames = data.importConditions('conditions\\trial_conditions.xlsx',returnFieldNames=True)
            temptrials = data.TrialHandler(temp_exp_conds,1)
            io.createTrialHandlerRecordTable(temptrials, temp_ecnames)
            temp_exp_conds =None
            temptrials=None

            penDotOpacity = 0
            penDotPosition = [0,0]
            penDotColor = [1,0,0]

        except Exception, e:
            import sys
            print "!! Error starting ioHub: ",e," Exiting..."
            core.quit()
            sys.exit(1)
      End Experiment:
        io.quit()
  Routine validate
    CodeComponent validate_code
      Begin Routine:
        display_penpos = True

        # Run the Pen Position Validation Procedure
        io.sendMessageEvent(">>> Pen Validation Procedure Started")
        val_result = ScreenPositionValidation(win, io,
                                              target_stim = None,
                                              pos_grid = None,
                                              display_pen_pos=display_penpos).run()
        if val_result is None:
            # This means that validation was terminated by user
            # before completing

            io.sendMessageEvent("Validation Procedure for "
                                 "Wintab Device Aborted.")
        io.sendMessageEvent(">>> Pen Validation Procedure Complete")


        if val_result:
            # Save out the validation results to the hdf5 file as messages
            # in case we want to access the data later
            #import pprint
            #pprint.pprint(val_result)
            io.sendMessageEvent(">>> Pen Validation Results")
            for key, val in val_result.items():
                if key is not 'target_data':
                    # do not send msg for the dict of arrays of samples
                    io.sendMessageEvent("{} : {}".format(key,val))
            io.sendMessageEvent("<<< Pen Validation Results End")
Flow
  Routine Init_tablet
  Routine instruct
  Routine validate
  Routine practice
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions\trial_conditions.xlsx
    loopType = random
    nReps = 1
    endPoints = [1, 2]
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    conditions:
      [{u'DV_TRIAL_START': None, u'T_IMG': u'3Lines.png', u'ITI': 0.5, u'DV_TRIAL_END': None, u'ROW_INDEX': 1, u'T_START_SND': u'go.wav', u'T_TEXT': u'Write your full name:', u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': None, u'T_IMG': u'3Lines.png', u'ITI': 0.5, u'DV_TRIAL_END': None, u'ROW_INDEX': 2, u'T_START_SND': u'go.wav', u'T_TEXT': u'Write the name of the city you live in:', u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': None, u'T_IMG': u'3Lines.png', u'ITI': 0.5, u'DV_TRIAL_END': None, u'ROW_INDEX': 3, u'T_START_SND': u'go.wav', u'T_TEXT': u'Write all letters of the alphabet from A to Z, using upper case letters:', u'DV_TRIAL_ID': -1},
      {u'DV_TRIAL_START': None, u'T_IMG': u'3Lines.png', u'ITI': 0.5, u'DV_TRIAL_END': None, u'ROW_INDEX': 4, u'T_START_SND': u'go.wav', u'T_TEXT': u'Write all letters of the alphabet from A to Z, using lower case letters:', u'DV_TRIAL_ID': -1}]
    Routine DisplayNoWritingScreen
    Routine Play_AV
    Routine DisplayNoWriting_1sec
    Routine trial
  LoopTerminator trials
  Routine thanks
